PsychoPy2experiment version="2020.2.8"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[1,1,1]
  expName = experiment
  exportHTML = on Save
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $path
      size = (1, 0.75)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    TextComponent text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 2.0
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      text:
        Press 'up' if the trend was increasing.
        Press 'down' if the trend was decreasing.
    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instruct_text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Instructions

        In each trial in this experiment, you will be shown a graph and you have to determine whether the overall trend is increasing or decreasing from left-to-right. Please sit straight and pay attention to the screen throughout the experiment.

        Each trial consists of three phases and proceeds in the following manner:

        - Phase I: a white screen is displayed (0.5 seconds)

        - Phase II: a graph containing data points from a noisy increasing or decreasing trend is displayed (with axes as reference). This is all the time you will be given to look at the graph (1.5 seconds)

        - Phase III: The graph is removed and you have to choose whether the trend was increasing (press up arrow key) or decreasing (press down arrow key). This is a forced-choice experiment so you have to choose the most likely answer even if there doesn't seem to be an obvious trend.

        The choice can be made either in Phase II or Phase III of the trial. The actual experiment will start after a 3 second countdown.

        Press any key to continue.
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine timer
    TextComponent timer1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent timer2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent timer3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent timergo
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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      text:
        Start!
  Routine thanks
    TextComponent text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment!

        Please attached the generated .csv file to the form circulated with this link. (The .csv file must have already been downloaded to your computer)

        Press any key to exit.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example1
    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        Blank phase (0.5 seconds).

        This phase is right before the graph-display phase. Nothing is displayed on the screen during this short period.

        Press any key to continue.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example2
    TextComponent text_4
      color = black
      letterHeight = 0.015
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Graph display phase (1.5 seconds)
        You can respond during this time. Press 'up arrow' if you think the trend is increasing and 'down arrow' if you think it is decreasing. This phase lasts only 1.5 seconds so you have to think quick, you can still respond after the graph has stopped displaying - i.e. in the next phase. Press 'up' key to continue.
    ImageComponent image_2
      image = dataset\135.png
      pos = (0, -0.05)
      size = (1, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'up',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example3
    TextComponent text_5
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Press 'up' if the trend was increasing.
        Press 'down' if the trend was decreasing.
    TextComponent text_6
      color = black
      letterHeight = 0.0325
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Response phase (infinite)

        This phase is only displayed if you didn't respond in the last phase and lasts as long as you don't respond with either 'increasing' or 'decreasing'.

        Press the 'up' key to continue
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine get_ready
    TextComponent text_7
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Press any key when you're ready to start the experiment.

        The first graph will be displayed after a three second countdown.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruct
  Routine get_ready
  Routine timer
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = dataset\setdesc.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('label', 0), ('is_control', False), ('repl_no', -0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 1), ('is_control', False), ('repl_no', -0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 2), ('is_control', False), ('repl_no', -0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 3), ('is_control', False), ('repl_no', -0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 4), ('is_control', False), ('repl_no', 0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 5), ('is_control', False), ('repl_no', 0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 6), ('is_control', False), ('repl_no', 0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 7), ('is_control', False), ('repl_no', 0.01), ('slope', 0.0), ('noise', None)]),
      OrderedDict([('label', 8), ('is_control', False), ('repl_no', -0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 9), ('is_control', False), ('repl_no', -0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 10), ('is_control', False), ('repl_no', -0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 11), ('is_control', False), ('repl_no', -0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 12), ('is_control', False), ('repl_no', 0.01), ('slope', 0.025), ('noise', None)]),
      OrderedDict([('label', 13), ('is_control', False), ('repl_no', 0.01), ('slope', 0.025), ('noise', None)])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
    Routine trial
  LoopTerminator trials
  Routine thanks
